CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:top_filter_brighter_(?P<timepoint>[0-9]{4})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:neutrophil
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:neutrophil
    Name the output image:cropped
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:150,-150
    Top and bottom rectangle positions:0,end
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    Remove empty rows and columns?:All
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:cropped
    Name the output image:illumination_function
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:15
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:cropped
    Name the output image:corrected
    Select the illumination function:illumination_function
    Select how the illumination function is applied:Divide

RescaleIntensity:[module_num:8|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
    Select the input image:corrected
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
Smooth:[module_num:9|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
    Select the input image:RescaleIntensity
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
RescaleIntensity:[module_num:10|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
    Select the input image:FilteredImage
    Name the output image:final_neutrophils
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:final_neutrophils
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.05,0.95
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

TrackObjects:[module_num:13|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
    Choose a tracking method:LAP
    Select the objects to track:IdentifyPrimaryObjects
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    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
    Select the movement model:Both
    Number of standard deviations for search radius:5
    Search radius limit, in pixel units (Min,Max):10,20
    Run the second phase of the LAP algorithm?:No
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    Filter objects by lifetime?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:final_neutrophils
    Select method for constructing file names:From image filename
    Select image name for file prefix:neutrophil
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|correted
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:neutrophil
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|segmented
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:neutrophil
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|tracked
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|201903_testsequence
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Experiment|Modification_Timestamp,Experiment|Pipeline_Pipeline,Experiment|Run_Timestamp,Experiment|CellProfiler_Version,Image|Count_IdentifyPrimaryObjects,Image|Group_Index,Image|Group_Number,Image|Width_neutrophil,Image|ExecutionTime_16SaveImages,Image|ExecutionTime_01Images,Image|ExecutionTime_07CorrectIlluminationApply,Image|ExecutionTime_12ConvertObjectsToImage,Image|ExecutionTime_13TrackObjects,Image|ExecutionTime_14SaveImages,Image|ExecutionTime_02Metadata,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_05Crop,Image|ExecutionTime_15SaveImages,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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